PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AB practice paradigm
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        WELCOME TO THE PRACTICE TASK!!

        In this task, you will see a rapid sequence of flashing letters presented at the center of the screen.Interspersed among the letters, two NUMBERS (digits between 2 and 9) will appear.

        YOUR TASK:
        1. Pay close attention to the entire stream.
        2. Remember the FIRST number .
        3. Remember the SECOND number .

        After each stream ends, you will be prompted to type both numbers in the exact order they appeared using your keyboard.Maintain your focus on the central fixation cross (+) throughout the task.

        Press the SPACEBAR when you are ready to begin.
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Exclude visual confounds I, O, Q, Z from distractors
        letters = list("ABCDEFGHJKLMNPRSTUVWXY")

        # Exclude 0, 1 from targets
        digits = list("23456789")
      Begin Routine:
        # 1. Randomize T1 position (indices 3, 4, or 5 -> 4th, 5th, or 6th item)
        t1_pos = random.choice([3, 4, 5])

        # 2. Set T2 position based on trial lag (lag comes from conditions.csv)
        t2_pos = t1_pos + int(lag)

        # 3. Select unique digits for T1 and T2
        t1_val = random.choice(digits)
        remaining_digits = [d for d in digits if d != t1_val]
        t2_val = random.choice(remaining_digits)

        # 4. Generate 18 letter distractors
        stream_items = random.sample(letters, 18)

        # 5. Insert targets into the stream
        stream_items[t1_pos] = t1_val
        stream_items[t2_pos] = t2_val

        # 6. Reset stream item index for the RSVP inner loop
        item_idx = 0
        # 7. Log T1 and T2 ground-truth values to the data output
        thisExp.addData('t1_val', t1_val)
        thisExp.addData('t2_val', t2_val)
  Routine rsvp_presentation
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    CodeComponent stream_code
      Code Type = Auto->JS
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      Begin Routine:
        current_item = stream_items[item_idx]
        item_idx += 1
    TextComponent rsvp_text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $current_item
      units = height
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  Routine response
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    TextComponent resp_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Enter the FIRST number (T1), then the SECOND number (T2)
    KeyboardComponent resp_keys
      allowedKeys = '2', '3', '4', '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent response_code
      Code Type = Auto->JS
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      Each Frame:
        # Check if 2 digits have been typed
        if resp_keys.keys and len(resp_keys.keys) >= 2:
            continueRoutine = False
      End Routine:
        # Evaluate T1 and T2 accuracy upon routine completion
        t1_corr = False
        t2_corr = False

        if resp_keys.keys and len(resp_keys.keys) >= 2:
            if str(resp_keys.keys[0]) == str(t1_val):
                t1_corr = True
            if str(resp_keys.keys[1]) == str(t2_val):
                t2_corr = True

        # Record accuracy columns to the raw dataset
        thisExp.addData('t1_correct', t1_corr)
        thisExp.addData('t2_correct', t2_corr)
  Routine rest_break
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    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        # Show break screen only on Trial 40 (index 39)
        if trials.thisN != 39:
            continueRoutine = False
    TextComponent break_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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      text:
        BLOCK 1 COMPLETE


        Take a rest break to relax your eyes.

        When you are well-rested and ready for Block 2.

        press the SPACEBAR to continue.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finish
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    TextComponent finish_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = height
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      text:
        Practice task is completed!!

        Let us move to main task!!
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('lag', np.int64(2)), ('conditionName', 'Lag2_200ms')]),
      OrderedDict([('lag', np.int64(8)), ('conditionName', 'Lag8_800ms')])]
    Routine fixation
    Routine trial
    LoopInitiator stream_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 18
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      Routine rsvp_presentation
    LoopTerminator stream_loop
    Routine response
    Routine rest_break
  LoopTerminator trials
  Routine finish
